PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['name'], expName, expInfo['date'])
  Experiment info = {'name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = IFR
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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  Routine word_presentation
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if t >= 1:
            continueRoutine = False
  Routine recall
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    TextboxComponent textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxTime
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxTime
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        maxTime = 30
      Each Frame:
        currTime = timer.getTime()
        elapsed = currTime - startTime
        maxTime = 30 - elapsed
        if elapsed > 30:
            countinueRoutine = False
            recall_loop.finished = True
    TextComponent text_7
      color = black
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxTime
      text = type each word and press ENTER to submit it
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  Routine start_recall
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        timer = core.Clock()
      Begin Routine:
        startTime = timer.getTime()
  Routine blank_screen
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine blank_1s
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if t >= 1:
            continueRoutine = False
  Routine instructions
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        On each trial of this task, you will see a list of 10 words presented one at a time.

        Then, you will see a text box, at which time you will type the words you saw on the list (one at a time), in any order in which you remember them. You will have 30 seconds to recall the words.

        Press the spacebar to start a practice list.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_2
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    TextboxComponent textbox_2
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxTime
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxTime
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        maxTime = 30
      Each Frame:
        currTime = timer.getTime()
        elapsed = currTime - startTime
        maxTime = 30-elapsed
        if elapsed > 30:
            countinueRoutine = False
            practice_recall.finished = True
    TextComponent text_9
      color = black
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $maxTime
      text = type each word and press ENTER to submit it
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  Routine end_practice
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        That is the end of the practice.

        You will now complete several lists. Try to remember as many words as you can from each list. But only report the words you remember seeing on the immediately preceding study list.

        Press the spacebar to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exitRoutine
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    TextComponent text_8
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Please wait while we save your data...
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Flow
  Routine instructions
  LoopInitiator practice_encoding loopType="TrialHandler"
    conditionsFile = DFR1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'music')]),
      OrderedDict([('Word', 'angel')]),
      OrderedDict([('Word', 'intro')]),
      OrderedDict([('Word', 'thing')]),
      OrderedDict([('Word', 'straw')]),
      OrderedDict([('Word', 'dough')]),
      OrderedDict([('Word', 'metal')]),
      OrderedDict([('Word', 'shelf')]),
      OrderedDict([('Word', 'liver')]),
      OrderedDict([('Word', 'pearl')])]
    Routine word_presentation
    Routine blank_1s
  LoopTerminator practice_encoding
  Routine start_recall
  LoopInitiator practice_recall loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine recall_2
  LoopTerminator practice_recall
  Routine end_practice
  LoopInitiator word_loop loopType="TrialHandler"
    conditionsFile = dfroutterloop1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('List', 'DFR2.csv')]),
      OrderedDict([('List', 'DFR3.csv')]),
      OrderedDict([('List', 'DFR4.csv')]),
      OrderedDict([('List', 'DFR5.csv')]),
      OrderedDict([('List', 'DFR6.csv')]),
      OrderedDict([('List', 'DFR7.csv')]),
      OrderedDict([('List', 'DFR8.csv')]),
      OrderedDict([('List', 'DFR9.csv')]),
      OrderedDict([('List', 'DFR10.csv')]),
      OrderedDict([('List', 'DFR11.csv')]),
      OrderedDict([('List', 'DFR12.csv')])]
    Routine blank_screen
    LoopInitiator encoding_loop loopType="TrialHandler"
      conditionsFile = $List
      loopType = sequential
      nReps = 1
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      Routine word_presentation
      Routine blank_1s
    LoopTerminator encoding_loop
    Routine start_recall
    LoopInitiator recall_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 25
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      Routine recall
    LoopTerminator recall_loop
  LoopTerminator word_loop
  Routine exitRoutine
